PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1470, 956]
  color = 0.8824, 0.9451, 1.0000
  expName = VWFA_task_psychopy
  keyboardBackend = ioHub
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Routines
  Routine WordBlock_1
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    ImageComponent WordImages_1
      image [set every repeat] = $WordImage_1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    TextComponent isiWordBlock_1
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = .1923
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    CodeComponent randomcolor
      Code Type = Auto->JS
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      Begin Routine:
        from random import random

        # Begin Routine
        # Generate random RGB values
        red = random()
        green = random()
        blue = random()
        win.color = [red, green, blue]
  Routine ScrWordBlock_1
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    ImageComponent ScrWordImages_1
      image [set every repeat] = $ScrWordImage_1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    TextComponent isiScrWordBlock_1
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = .1923
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    CodeComponent randomcolor_2
      Code Type = Auto->JS
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      Begin Routine:
        from random import random

        # Begin Routine
        # Generate random RGB values
        red = random()
        green = random()
        blue = random()
        win.color = [red, green, blue]
  Routine ObjectBlock_1
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    ImageComponent ObjectImages_1
      image [set every repeat] = $ObjectImage_1
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    TextComponent isiObjectBlock_1
      letterHeight = 0.05
      startVal [time (s)] = .5
      stopVal [duration (s)] = .1923
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    CodeComponent randomcolor_3
      Code Type = Auto->JS
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      Begin Routine:
        from random import random

        # Begin Routine
        # Generate random RGB values
        red = random()
        green = random()
        blue = random()
        win.color = [red, green, blue]
  Routine FaceBlock_1
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    ImageComponent FaceImages_1
      image [set every repeat] = $FaceImage_1
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    CodeComponent randomcolor_4
      Code Type = Auto->JS
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      Begin Routine:
        from random import random

        # Begin Routine
        # Generate random RGB values
        red = random()
        green = random()
        blue = random()
        win.color = [red, green, blue]
    TextComponent isiFaceBlock_1
      letterHeight = 0.05
      startVal [time (s)] = .5
      stopVal [duration (s)] = .1923
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  Routine fixation
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    TextComponent text_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .6923
      text = +
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    CodeComponent randomcolor_5
      Code Type = Auto->JS
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      Begin Routine:
        from random import random

        # Begin Routine
        # Generate random RGB values
        red = random()
        green = random()
        blue = random()
        win.color = [red, green, blue]
  Routine WordBlock_2
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    ImageComponent WordImages_2
      image [set every repeat] = $WordImage_2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    TextComponent isiWordBlock_2
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = .1923
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    CodeComponent randomcolor_6
      Code Type = Auto->JS
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      Begin Routine:
        from random import random

        # Begin Routine
        # Generate random RGB values
        red = random()
        green = random()
        blue = random()
        win.color = [red, green, blue]
  Routine ScrWordBlock_2
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    ImageComponent ScrWordImages_2
      image [set every repeat] = $ScrWordImage_2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    TextComponent isiScrWordBlock_2
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = .1923
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    CodeComponent randomcolor_7
      Code Type = Auto->JS
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      Begin Routine:
        from random import random

        # Begin Routine
        # Generate random RGB values
        red = random()
        green = random()
        blue = random()
        win.color = [red, green, blue]
  Routine ObjectBlock_2
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    ImageComponent ObjectImages_2
      image [set every repeat] = $ObjectImage_2
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    TextComponent isiObjectBlock_2
      letterHeight = 0.05
      startVal [time (s)] = .5
      stopVal [duration (s)] = .1923
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    CodeComponent randomcolor_8
      Code Type = Auto->JS
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      Begin Routine:
        from random import random

        # Begin Routine
        # Generate random RGB values
        red = random()
        green = random()
        blue = random()
        win.color = [red, green, blue]
  Routine FaceBlock_2
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    ImageComponent FaceImages_2
      image [set every repeat] = $FaceImage_2
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    TextComponent isiFaceBlock_2
      letterHeight = 0.05
      startVal [time (s)] = .5
      stopVal [duration (s)] = .1923
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    CodeComponent randomcolor_9
      Code Type = Auto->JS
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      Begin Routine:
        from random import random

        # Begin Routine
        # Generate random RGB values
        red = random()
        green = random()
        blue = random()
        win.color = [red, green, blue]
  Routine WordBlock_3
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    ImageComponent WordImages_3
      image [set every repeat] = $WordImage_3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    TextComponent isiWordBlock_3
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = .1923
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    CodeComponent randomcolor_10
      Code Type = Auto->JS
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      Begin Routine:
        from random import random

        # Begin Routine
        # Generate random RGB values
        red = random()
        green = random()
        blue = random()
        win.color = [red, green, blue]
  Routine ObjectBlock_3
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    ImageComponent ObjectImages_3
      image [set every repeat] = $ObjectImage_3
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    TextComponent isiObjectWordBlock_3
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = .1923
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    CodeComponent randomcolor_11
      Code Type = Auto->JS
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      Begin Routine:
        from random import random

        # Begin Routine
        # Generate random RGB values
        red = random()
        green = random()
        blue = random()
        win.color = [red, green, blue]
  Routine ScrWordBlock_3
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    ImageComponent ScrWordImages_3
      image [set every repeat] = $ScrWordImage_3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    TextComponent isiScrWordBlock_3
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = .1923
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    CodeComponent randomcolor_12
      Code Type = Auto->JS
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      Begin Routine:
        from random import random

        # Begin Routine
        # Generate random RGB values
        red = random()
        green = random()
        blue = random()
        win.color = [red, green, blue]
  Routine FaceBlock_3
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    ImageComponent FaceImages_3
      image [set every repeat] = $FaceImage_3
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    TextComponent isiFaceBlock_3
      letterHeight = 0.05
      startVal [time (s)] = .5
      stopVal [duration (s)] = .1923
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    CodeComponent randomcolor_13
      Code Type = Auto->JS
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      Begin Routine:
        from random import random

        # Begin Routine
        # Generate random RGB values
        red = random()
        green = random()
        blue = random()
        win.color = [red, green, blue]
  Routine WordBlock_4
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    ImageComponent WordImages_4
      image [set every repeat] = $WordImage_4
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    TextComponent isiWordBlock_4
      letterHeight = 0.05
      startVal [time (s)] = .5
      stopVal [duration (s)] = .1923
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    CodeComponent randomcolor_14
      Code Type = Auto->JS
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      Begin Routine:
        from random import random

        # Begin Routine
        # Generate random RGB values
        red = random()
        green = random()
        blue = random()
        win.color = [red, green, blue]
  Routine ScrWordBlock_4
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  Routine ObjectBlock_4
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    ImageComponent ObjectImages_4
      image [set every repeat] = $ObjectImage_4
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    TextComponent isiObjectBlock_4
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = .1923
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    CodeComponent randomcolor_16
      Code Type = Auto->JS
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      Begin Routine:
        from random import random

        # Begin Routine
        # Generate random RGB values
        red = random()
        green = random()
        blue = random()
        win.color = [red, green, blue]
  Routine FaceBlock_4
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    ImageComponent FaceImages_4
      image [set every repeat] = $FaceImage_4
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    TextComponent isiFaceBlock_4
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = .1923
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    CodeComponent randomcolor_17
      Code Type = Auto->JS
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      Begin Routine:
        from random import random

        # Begin Routine
        # Generate random RGB values
        red = random()
        green = random()
        blue = random()
        win.color = [red, green, blue]
Flow
  LoopInitiator wordblock_1_loop loopType="TrialHandler"
    conditionsFile = WordConditions_1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'WordImage_1': 'vwfaLoc/stimuli/word_pngs_grid/grid_purse.png', 'Doubled': 0},
      {'WordImage_1': 'vwfaLoc/stimuli/word_pngs_grid/grid_beach.png', 'Doubled': 0},
      {'WordImage_1': 'vwfaLoc/stimuli/word_pngs_grid/grid_goat.png', 'Doubled': 0},
      {'WordImage_1': 'vwfaLoc/stimuli/word_pngs_grid/grid_sign.png', 'Doubled': 0},
      {'WordImage_1': 'vwfaLoc/stimuli/word_pngs_grid/grid_monkey.png', 'Doubled': 0},
      {'WordImage_1': 'vwfaLoc/stimuli/word_pngs_grid/grid_flower.png', 'Doubled': 0},
      {'WordImage_1': 'vwfaLoc/stimuli/word_pngs_grid/grid_snow.png', 'Doubled': 0},
      {'WordImage_1': 'vwfaLoc/stimuli/word_pngs_grid/grid_frame.png', 'Doubled': 0},
      {'WordImage_1': 'vwfaLoc/stimuli/word_pngs_grid/grid_jelly.png', 'Doubled': 0},
      {'WordImage_1': 'vwfaLoc/stimuli/word_pngs_grid/grid_army.png', 'Doubled': 0},
      {'WordImage_1': 'vwfaLoc/stimuli/word_pngs_grid/grid_swamp.png', 'Doubled': 0},
      {'WordImage_1': 'vwfaLoc/stimuli/word_pngs_grid/grid_coat.png', 'Doubled': 0},
      {'WordImage_1': 'vwfaLoc/stimuli/word_pngs_grid/grid_coat.png', 'Doubled': 1},
      {'WordImage_1': 'vwfaLoc/stimuli/word_pngs_grid/grid_nest.png', 'Doubled': 0},
      {'WordImage_1': 'vwfaLoc/stimuli/word_pngs_grid/grid_shower.png', 'Doubled': 0},
      {'WordImage_1': 'vwfaLoc/stimuli/word_pngs_grid/grid_guest.png', 'Doubled': 0},
      {'WordImage_1': 'vwfaLoc/stimuli/word_pngs_grid/grid_duck.png', 'Doubled': 0},
      {'WordImage_1': 'vwfaLoc/stimuli/word_pngs_grid/grid_duck.png', 'Doubled': 1},
      {'WordImage_1': 'vwfaLoc/stimuli/word_pngs_grid/grid_mayor.png', 'Doubled': 0}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
    Routine WordBlock_1
  LoopTerminator wordblock_1_loop
  LoopInitiator scrwordblock_1_loop loopType="TrialHandler"
    conditionsFile = ScrWordConditions_1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'ScrWordImage_1': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_cash.png', 'Doubled': 0},
      {'ScrWordImage_1': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_jelly.png', 'Doubled': 0},
      {'ScrWordImage_1': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_chair.png', 'Doubled': 0},
      {'ScrWordImage_1': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_road.png', 'Doubled': 0},
      {'ScrWordImage_1': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_finger.png', 'Doubled': 0},
      {'ScrWordImage_1': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_storm.png', 'Doubled': 0},
      {'ScrWordImage_1': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_rocket.png', 'Doubled': 0},
      {'ScrWordImage_1': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_cream.png', 'Doubled': 0},
      {'ScrWordImage_1': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_dentist.png', 'Doubled': 0},
      {'ScrWordImage_1': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_monkey.png', 'Doubled': 0},
      {'ScrWordImage_1': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_apple.png', 'Doubled': 0},
      {'ScrWordImage_1': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_apple.png', 'Doubled': 1},
      {'ScrWordImage_1': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_hill.png', 'Doubled': 0},
      {'ScrWordImage_1': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_bridge.png', 'Doubled': 0},
      {'ScrWordImage_1': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_honey.png', 'Doubled': 0},
      {'ScrWordImage_1': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_ribbon.png', 'Doubled': 0}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
    Routine ScrWordBlock_1
  LoopTerminator scrwordblock_1_loop
  LoopInitiator objectblock_1_loop loopType="TrialHandler"
    conditionsFile = ObjectConditions_1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'ObjectImage_1': 'vwfaLoc/stimuli/line_pngs_grid/grid_TRICYC_A.png', 'Doubled': 0},
      {'ObjectImage_1': 'vwfaLoc/stimuli/line_pngs_grid/grid_Pig.png', 'Doubled': 0},
      {'ObjectImage_1': 'vwfaLoc/stimuli/line_pngs_grid/grid_OBJ31.png', 'Doubled': 0},
      {'ObjectImage_1': 'vwfaLoc/stimuli/line_pngs_grid/grid_boot.png', 'Doubled': 0},
      {'ObjectImage_1': 'vwfaLoc/stimuli/line_pngs_grid/grid_cherry.png', 'Doubled': 0},
      {'ObjectImage_1': 'vwfaLoc/stimuli/line_pngs_grid/grid_Key.png', 'Doubled': 0},
      {'ObjectImage_1': 'vwfaLoc/stimuli/line_pngs_grid/grid_Banana.png', 'Doubled': 0},
      {'ObjectImage_1': 'vwfaLoc/stimuli/line_pngs_grid/grid_Eye.png', 'Doubled': 0},
      {'ObjectImage_1': 'vwfaLoc/stimuli/line_pngs_grid/grid_Rollerskate.png', 'Doubled': 0},
      {'ObjectImage_1': 'vwfaLoc/stimuli/line_pngs_grid/grid_OBJ37A.png', 'Doubled': 0},
      {'ObjectImage_1': 'vwfaLoc/stimuli/line_pngs_grid/grid_refrigerator.png', 'Doubled': 0},
      {'ObjectImage_1': 'vwfaLoc/stimuli/line_pngs_grid/grid_CHAIR_B.png', 'Doubled': 0},
      {'ObjectImage_1': 'vwfaLoc/stimuli/line_pngs_grid/grid_OBJ30.png', 'Doubled': 0},
      {'ObjectImage_1': 'vwfaLoc/stimuli/line_pngs_grid/grid_Scissors.png', 'Doubled': 0},
      {'ObjectImage_1': 'vwfaLoc/stimuli/line_pngs_grid/grid_wineglass.png', 'Doubled': 0},
      {'ObjectImage_1': 'vwfaLoc/stimuli/line_pngs_grid/grid_TV.png', 'Doubled': 0},
      {'ObjectImage_1': 'vwfaLoc/stimuli/line_pngs_grid/grid_BowTie.png', 'Doubled': 0},
      {'ObjectImage_1': 'vwfaLoc/stimuli/line_pngs_grid/grid_OBJ33A.png', 'Doubled': 0}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
    Routine ObjectBlock_1
  LoopTerminator objectblock_1_loop
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = FaceConditions_1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'FaceImage_1': 'vwfaLoc/stimuli/face_pngs_grid/grid_face_draw5_1.png', 'Doubled': 0},
      {'FaceImage_1': 'vwfaLoc/stimuli/face_pngs_grid/grid_face_draw14_1.png', 'Doubled': 0},
      {'FaceImage_1': 'vwfaLoc/stimuli/face_pngs_grid/grid_Screen Shot 2014-04-11 at 2.15.24 PM.png', 'Doubled': 0},
      {'FaceImage_1': 'vwfaLoc/stimuli/face_pngs_grid/grid_lnface01.png', 'Doubled': 0},
      {'FaceImage_1': 'vwfaLoc/stimuli/face_pngs_grid/grid_face_draw11_1.png', 'Doubled': 0},
      {'FaceImage_1': 'vwfaLoc/stimuli/face_pngs_grid/grid_Screen Shot 2014-04-11 at 2.12.21 PM.png', 'Doubled': 0},
      {'FaceImage_1': 'vwfaLoc/stimuli/face_pngs_grid/grid_Screen Shot 2014-04-11 at 2.16.15 PM.png', 'Doubled': 0},
      {'FaceImage_1': 'vwfaLoc/stimuli/face_pngs_grid/grid_Screen Shot 2014-04-11 at 1.53.08 PM.png', 'Doubled': 0},
      {'FaceImage_1': 'vwfaLoc/stimuli/face_pngs_grid/grid_Screen Shot 2014-04-11 at 1.57.45 PM.png', 'Doubled': 0},
      {'FaceImage_1': 'vwfaLoc/stimuli/face_pngs_grid/grid_face_draw12_4.png', 'Doubled': 0},
      {'FaceImage_1': 'vwfaLoc/stimuli/face_pngs_grid/grid_face_draw12_3.png', 'Doubled': 0},
      {'FaceImage_1': 'vwfaLoc/stimuli/face_pngs_grid/grid_Screen Shot 2014-04-11 at 1.58.51 PM.png', 'Doubled': 0},
      {'FaceImage_1': 'vwfaLoc/stimuli/face_pngs_grid/grid_Screen Shot 2014-04-11 at 1.53.31 PM.png', 'Doubled': 0},
      {'FaceImage_1': 'vwfaLoc/stimuli/face_pngs_grid/grid_Screen Shot 2014-04-11 at 2.09.59 PM.png', 'Doubled': 0},
      {'FaceImage_1': 'vwfaLoc/stimuli/face_pngs_grid/grid_Screen Shot 2014-04-11 at 1.56.07 PM.png', 'Doubled': 0}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
    Routine FaceBlock_1
  LoopTerminator trials
  LoopInitiator fixationloop loopType="TrialHandler"
    loopType = random
    nReps = 26
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    Routine fixation
  LoopTerminator fixationloop
  LoopInitiator wordblock_2_loop loopType="TrialHandler"
    conditionsFile = WordConditions_2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'WordImage_2': 'vwfaLoc/stimuli/word_pngs_grid/grid_pencil.png', 'Doubled': 0},
      {'WordImage_2': 'vwfaLoc/stimuli/word_pngs_grid/grid_coin.png', 'Doubled': 0},
      {'WordImage_2': 'vwfaLoc/stimuli/word_pngs_grid/grid_cloth.png', 'Doubled': 0},
      {'WordImage_2': 'vwfaLoc/stimuli/word_pngs_grid/grid_lawn.png', 'Doubled': 0},
      {'WordImage_2': 'vwfaLoc/stimuli/word_pngs_grid/grid_finger.png', 'Doubled': 0},
      {'WordImage_2': 'vwfaLoc/stimuli/word_pngs_grid/grid_park .png', 'Doubled': 0},
      {'WordImage_2': 'vwfaLoc/stimuli/word_pngs_grid/grid_farm.png', 'Doubled': 0},
      {'WordImage_2': 'vwfaLoc/stimuli/word_pngs_grid/grid_cream.png', 'Doubled': 0},
      {'WordImage_2': 'vwfaLoc/stimuli/word_pngs_grid/grid_film.png', 'Doubled': 0},
      {'WordImage_2': 'vwfaLoc/stimuli/word_pngs_grid/grid_cash.png', 'Doubled': 0},
      {'WordImage_2': 'vwfaLoc/stimuli/word_pngs_grid/grid_butter.png', 'Doubled': 0},
      {'WordImage_2': 'vwfaLoc/stimuli/word_pngs_grid/grid_sugar.png', 'Doubled': 0},
      {'WordImage_2': 'vwfaLoc/stimuli/word_pngs_grid/grid_mate.png', 'Doubled': 0},
      {'WordImage_2': 'vwfaLoc/stimuli/word_pngs_grid/grid_liver.png', 'Doubled': 0},
      {'WordImage_2': 'vwfaLoc/stimuli/word_pngs_grid/grid_road.png', 'Doubled': 0},
      {'WordImage_2': 'vwfaLoc/stimuli/word_pngs_grid/grid_mast.png', 'Doubled': 0},
      {'WordImage_2': 'vwfaLoc/stimuli/word_pngs_grid/grid_rocket.png', 'Doubled': 0},
      {'WordImage_2': 'vwfaLoc/stimuli/word_pngs_grid/grid_bridge.png', 'Doubled': 0},
      {'WordImage_2': 'vwfaLoc/stimuli/word_pngs_grid/grid_bridge.png', 'Doubled': 1}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
    Routine WordBlock_2
  LoopTerminator wordblock_2_loop
  LoopInitiator scrwordblock_2_loop loopType="TrialHandler"
    conditionsFile = ScrWordConditions_2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'ScrWordImage_2': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_puzzle.png', 'Doubled': 0},
      {'ScrWordImage_2': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_kite.png', 'Doubled': 0},
      {'ScrWordImage_2': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_shower.png', 'Doubled': 0},
      {'ScrWordImage_2': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_letter.png', 'Doubled': 0},
      {'ScrWordImage_2': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_purse.png', 'Doubled': 0},
      {'ScrWordImage_2': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_label.png', 'Doubled': 0},
      {'ScrWordImage_2': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_nest.png', 'Doubled': 0},
      {'ScrWordImage_2': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_field.png', 'Doubled': 0},
      {'ScrWordImage_2': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_ankle.png', 'Doubled': 0},
      {'ScrWordImage_2': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_ankle.png', 'Doubled': 1},
      {'ScrWordImage_2': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_fire.png', 'Doubled': 0},
      {'ScrWordImage_2': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_lawn.png', 'Doubled': 0},
      {'ScrWordImage_2': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_water.png', 'Doubled': 0},
      {'ScrWordImage_2': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_string.png', 'Doubled': 0},
      {'ScrWordImage_2': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_school.png', 'Doubled': 0},
      {'ScrWordImage_2': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_film.png', 'Doubled': 0}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
    Routine ScrWordBlock_2
  LoopTerminator scrwordblock_2_loop
  LoopInitiator objectblock_2_loop loopType="TrialHandler"
    conditionsFile = ObjectConditions_2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'ObjectImage_2': 'vwfaLoc/stimuli/line_pngs_grid/grid_OBJ30A.png', 'Doubled': 0},
      {'ObjectImage_2': 'vwfaLoc/stimuli/line_pngs_grid/grid_OBJ33.png', 'Doubled': 0},
      {'ObjectImage_2': 'vwfaLoc/stimuli/line_pngs_grid/grid_OBJ33.png', 'Doubled': 1},
      {'ObjectImage_2': 'vwfaLoc/stimuli/line_pngs_grid/grid_Tent.png', 'Doubled': 0},
      {'ObjectImage_2': 'vwfaLoc/stimuli/line_pngs_grid/grid_Snowman.png', 'Doubled': 0},
      {'ObjectImage_2': 'vwfaLoc/stimuli/line_pngs_grid/grid_OBJ34.png', 'Doubled': 0},
      {'ObjectImage_2': 'vwfaLoc/stimuli/line_pngs_grid/grid_OBJ12.png', 'Doubled': 0},
      {'ObjectImage_2': 'vwfaLoc/stimuli/line_pngs_grid/grid_OBJ36.png', 'Doubled': 0},
      {'ObjectImage_2': 'vwfaLoc/stimuli/line_pngs_grid/grid_Ant.png', 'Doubled': 0},
      {'ObjectImage_2': 'vwfaLoc/stimuli/line_pngs_grid/grid_Ant.png', 'Doubled': 1},
      {'ObjectImage_2': 'vwfaLoc/stimuli/line_pngs_grid/grid_OBJ32.png', 'Doubled': 0},
      {'ObjectImage_2': 'vwfaLoc/stimuli/line_pngs_grid/grid_OBJ38A.png', 'Doubled': 0},
      {'ObjectImage_2': 'vwfaLoc/stimuli/line_pngs_grid/grid_Axe.png', 'Doubled': 0},
      {'ObjectImage_2': 'vwfaLoc/stimuli/line_pngs_grid/grid_BatBaseball.png', 'Doubled': 0},
      {'ObjectImage_2': 'vwfaLoc/stimuli/line_pngs_grid/grid_Airplane.png', 'Doubled': 0},
      {'ObjectImage_2': 'vwfaLoc/stimuli/line_pngs_grid/grid_Penguin.png', 'Doubled': 0},
      {'ObjectImage_2': 'vwfaLoc/stimuli/line_pngs_grid/grid_Sandwich.png', 'Doubled': 0},
      {'ObjectImage_2': 'vwfaLoc/stimuli/line_pngs_grid/grid_purse.png', 'Doubled': 0}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
    Routine ObjectBlock_2
  LoopTerminator objectblock_2_loop
  LoopInitiator faceblock_2_loop loopType="TrialHandler"
    conditionsFile = FaceConditions_2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'FaceImage_2': 'vwfaLoc/stimuli/face_pngs_grid/grid_Screen Shot 2014-04-11 at 2.15.09 PM.png', 'Doubled': 0},
      {'FaceImage_2': 'vwfaLoc/stimuli/face_pngs_grid/grid_Screen Shot 2014-04-11 at 2.13.23 PM.png', 'Doubled': 0},
      {'FaceImage_2': 'vwfaLoc/stimuli/face_pngs_grid/grid_Screen Shot 2014-04-11 at 2.10.38 PM.png', 'Doubled': 0},
      {'FaceImage_2': 'vwfaLoc/stimuli/face_pngs_grid/grid_Screen Shot 2014-04-11 at 2.11.18 PM.png', 'Doubled': 0},
      {'FaceImage_2': 'vwfaLoc/stimuli/face_pngs_grid/grid_Screen Shot 2014-04-11 at 2.09.31 PM.png', 'Doubled': 0},
      {'FaceImage_2': 'vwfaLoc/stimuli/face_pngs_grid/grid_Screen Shot 2014-04-11 at 2.12.44 PM.png', 'Doubled': 0},
      {'FaceImage_2': 'vwfaLoc/stimuli/face_pngs_grid/grid_Screen Shot 2014-04-11 at 2.12.00 PM.png', 'Doubled': 0},
      {'FaceImage_2': 'vwfaLoc/stimuli/face_pngs_grid/grid_Screen Shot 2014-04-11 at 1.56.31 PM.png', 'Doubled': 0},
      {'FaceImage_2': 'vwfaLoc/stimuli/face_pngs_grid/grid_face_draw16_2.png', 'Doubled': 0},
      {'FaceImage_2': 'vwfaLoc/stimuli/face_pngs_grid/grid_face_draw16_2.png', 'Doubled': 1},
      {'FaceImage_2': 'vwfaLoc/stimuli/face_pngs_grid/grid_Screen Shot 2014-04-11 at 1.55.13 PM.png', 'Doubled': 0},
      {'FaceImage_2': 'vwfaLoc/stimuli/face_pngs_grid/grid_Screen Shot 2014-04-11 at 2.14.56 PM.png', 'Doubled': 0},
      {'FaceImage_2': 'vwfaLoc/stimuli/face_pngs_grid/grid_Screen Shot 2014-04-11 at 1.52.22 PM.png', 'Doubled': 0},
      {'FaceImage_2': 'vwfaLoc/stimuli/face_pngs_grid/grid_face_draw4_4.png', 'Doubled': 0}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
    Routine FaceBlock_2
  LoopTerminator faceblock_2_loop
  LoopInitiator fixationloop2 loopType="TrialHandler"
    loopType = random
    nReps = 26
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    Routine fixation
  LoopTerminator fixationloop2
  LoopInitiator wordblock_3_loop loopType="TrialHandler"
    conditionsFile = WordConditions_3.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'WordImage_3': 'vwfaLoc/stimuli/word_pngs_grid/grid_fire.png', 'Doubled': 0},
      {'WordImage_3': 'vwfaLoc/stimuli/word_pngs_grid/grid_harbor.png', 'Doubled': 0},
      {'WordImage_3': 'vwfaLoc/stimuli/word_pngs_grid/grid_fruit.png', 'Doubled': 0},
      {'WordImage_3': 'vwfaLoc/stimuli/word_pngs_grid/grid_string.png', 'Doubled': 0},
      {'WordImage_3': 'vwfaLoc/stimuli/word_pngs_grid/grid_pond.png', 'Doubled': 0},
      {'WordImage_3': 'vwfaLoc/stimuli/word_pngs_grid/grid_apple.png', 'Doubled': 0},
      {'WordImage_3': 'vwfaLoc/stimuli/word_pngs_grid/grid_judge.png', 'Doubled': 0},
      {'WordImage_3': 'vwfaLoc/stimuli/word_pngs_grid/grid_label.png', 'Doubled': 0},
      {'WordImage_3': 'vwfaLoc/stimuli/word_pngs_grid/grid_hand.png', 'Doubled': 0},
      {'WordImage_3': 'vwfaLoc/stimuli/word_pngs_grid/grid_ankle.png', 'Doubled': 0},
      {'WordImage_3': 'vwfaLoc/stimuli/word_pngs_grid/grid_corner.png', 'Doubled': 0},
      {'WordImage_3': 'vwfaLoc/stimuli/word_pngs_grid/grid_corner.png', 'Doubled': 1},
      {'WordImage_3': 'vwfaLoc/stimuli/word_pngs_grid/grid_baby.png', 'Doubled': 0},
      {'WordImage_3': 'vwfaLoc/stimuli/word_pngs_grid/grid_letter.png', 'Doubled': 0},
      {'WordImage_3': 'vwfaLoc/stimuli/word_pngs_grid/grid_storm.png', 'Doubled': 0},
      {'WordImage_3': 'vwfaLoc/stimuli/word_pngs_grid/grid_kite.png', 'Doubled': 0},
      {'WordImage_3': 'vwfaLoc/stimuli/word_pngs_grid/grid_heel.png', 'Doubled': 0},
      {'WordImage_3': 'vwfaLoc/stimuli/word_pngs_grid/grid_shadow.png', 'Doubled': 0},
      {'WordImage_3': 'vwfaLoc/stimuli/word_pngs_grid/grid_shadow.png', 'Doubled': 1}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
    Routine WordBlock_3
  LoopTerminator wordblock_3_loop
  LoopInitiator scrwordblock_3_loop loopType="TrialHandler"
    conditionsFile = ScrWordConditions_3.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'ScrWordImage_3': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_hand.png', 'Doubled': 0},
      {'ScrWordImage_3': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_liver.png', 'Doubled': 0},
      {'ScrWordImage_3': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_cloth.png', 'Doubled': 0},
      {'ScrWordImage_3': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_cloth.png', 'Doubled': 1},
      {'ScrWordImage_3': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_crystal.png', 'Doubled': 0},
      {'ScrWordImage_3': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_radio.png', 'Doubled': 0},
      {'ScrWordImage_3': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_flea.png', 'Doubled': 0},
      {'ScrWordImage_3': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_pencil.png', 'Doubled': 0},
      {'ScrWordImage_3': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_butter.png', 'Doubled': 0},
      {'ScrWordImage_3': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_gold.png', 'Doubled': 0},
      {'ScrWordImage_3': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_gift.png', 'Doubled': 0},
      {'ScrWordImage_3': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_cherry.png', 'Doubled': 0},
      {'ScrWordImage_3': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_flag.png', 'Doubled': 0},
      {'ScrWordImage_3': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_swamp.png', 'Doubled': 0},
      {'ScrWordImage_3': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_beach.png', 'Doubled': 0},
      {'ScrWordImage_3': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_needle.png', 'Doubled': 0}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
    Routine ScrWordBlock_3
  LoopTerminator scrwordblock_3_loop
  LoopInitiator objectblock_3_loop loopType="TrialHandler"
    conditionsFile = ObjectConditions_3.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'ObjectImage_3': 'vwfaLoc/stimuli/line_pngs_grid/grid_OBJ23A.png', 'Doubled': 0},
      {'ObjectImage_3': 'vwfaLoc/stimuli/line_pngs_grid/grid_Bottle.png', 'Doubled': 0},
      {'ObjectImage_3': 'vwfaLoc/stimuli/line_pngs_grid/grid_bed.png', 'Doubled': 0},
      {'ObjectImage_3': 'vwfaLoc/stimuli/line_pngs_grid/grid_OBJ31A.png', 'Doubled': 0},
      {'ObjectImage_3': 'vwfaLoc/stimuli/line_pngs_grid/grid_Broom.png', 'Doubled': 0},
      {'ObjectImage_3': 'vwfaLoc/stimuli/line_pngs_grid/grid_Pitcher.png', 'Doubled': 0},
      {'ObjectImage_3': 'vwfaLoc/stimuli/line_pngs_grid/grid_Kite.png', 'Doubled': 0},
      {'ObjectImage_3': 'vwfaLoc/stimuli/line_pngs_grid/grid_Envelope.png', 'Doubled': 0},
      {'ObjectImage_3': 'vwfaLoc/stimuli/line_pngs_grid/grid_Fly.png', 'Doubled': 0},
      {'ObjectImage_3': 'vwfaLoc/stimuli/line_pngs_grid/grid_OBJ2.png', 'Doubled': 0},
      {'ObjectImage_3': 'vwfaLoc/stimuli/line_pngs_grid/grid_OBJ2.png', 'Doubled': 1},
      {'ObjectImage_3': 'vwfaLoc/stimuli/line_pngs_grid/grid_Stool.png', 'Doubled': 0},
      {'ObjectImage_3': 'vwfaLoc/stimuli/line_pngs_grid/grid_OBJ40.png', 'Doubled': 0},
      {'ObjectImage_3': 'vwfaLoc/stimuli/line_pngs_grid/grid_OBJ40.png', 'Doubled': 1},
      {'ObjectImage_3': 'vwfaLoc/stimuli/line_pngs_grid/grid_PIANO_A.png', 'Doubled': 0},
      {'ObjectImage_3': 'vwfaLoc/stimuli/line_pngs_grid/grid_OBJ5.png', 'Doubled': 0},
      {'ObjectImage_3': 'vwfaLoc/stimuli/line_pngs_grid/grid_ironingboard.png', 'Doubled': 0},
      {'ObjectImage_3': 'vwfaLoc/stimuli/line_pngs_grid/grid_OBJ29.png', 'Doubled': 0}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
    Routine ObjectBlock_3
  LoopTerminator objectblock_3_loop
  LoopInitiator faceblock_3_loop loopType="TrialHandler"
    conditionsFile = FaceConditions_3.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'FaceImage_3': 'vwfaLoc/stimuli/face_pngs_grid/grid_Screen Shot 2014-04-11 at 2.14.26 PM.png', 'Doubled': 0},
      {'FaceImage_3': 'vwfaLoc/stimuli/face_pngs_grid/grid_face_draw8_2.png', 'Doubled': 0},
      {'FaceImage_3': 'vwfaLoc/stimuli/face_pngs_grid/grid_Screen Shot 2014-04-11 at 1.55.37 PM.png', 'Doubled': 0},
      {'FaceImage_3': 'vwfaLoc/stimuli/face_pngs_grid/grid_face_draw4_1.png', 'Doubled': 0},
      {'FaceImage_3': 'vwfaLoc/stimuli/face_pngs_grid/grid_face_draw1_1.png', 'Doubled': 0},
      {'FaceImage_3': 'vwfaLoc/stimuli/face_pngs_grid/grid_Screen Shot 2014-04-11 at 3.46.46 PM.png', 'Doubled': 0},
      {'FaceImage_3': 'vwfaLoc/stimuli/face_pngs_grid/grid_Screen Shot 2014-04-11 at 2.09.39 PM.png', 'Doubled': 0},
      {'FaceImage_3': 'vwfaLoc/stimuli/face_pngs_grid/grid_Screen Shot 2014-04-11 at 1.58.02 PM.png', 'Doubled': 0},
      {'FaceImage_3': 'vwfaLoc/stimuli/face_pngs_grid/grid_Screen Shot 2014-04-11 at 1.52.01 PM.png', 'Doubled': 0},
      {'FaceImage_3': 'vwfaLoc/stimuli/face_pngs_grid/grid_Screen Shot 2014-04-11 at 2.17.11 PM.png', 'Doubled': 0},
      {'FaceImage_3': 'vwfaLoc/stimuli/face_pngs_grid/grid_Screen Shot 2014-04-11 at 2.13.43 PM.png', 'Doubled': 0},
      {'FaceImage_3': 'vwfaLoc/stimuli/face_pngs_grid/grid_Screen Shot 2014-04-11 at 3.47.19 PM.png', 'Doubled': 0},
      {'FaceImage_3': 'vwfaLoc/stimuli/face_pngs_grid/grid_face_draw16_1.png', 'Doubled': 0},
      {'FaceImage_3': 'vwfaLoc/stimuli/face_pngs_grid/grid_face_draw16_1.png', 'Doubled': 1}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
    Routine FaceBlock_3
  LoopTerminator faceblock_3_loop
  LoopInitiator fixationloop3 loopType="TrialHandler"
    loopType = random
    nReps = 26
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    Routine fixation
  LoopTerminator fixationloop3
  LoopInitiator wordblock_4_loop loopType="TrialHandler"
    conditionsFile = WordConditions_4.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'WordImage_4': 'vwfaLoc/stimuli/word_pngs_grid/grid_school.png', 'Doubled': 0},
      {'WordImage_4': 'vwfaLoc/stimuli/word_pngs_grid/grid_ribbon.png', 'Doubled': 0},
      {'WordImage_4': 'vwfaLoc/stimuli/word_pngs_grid/grid_hawk.png', 'Doubled': 0},
      {'WordImage_4': 'vwfaLoc/stimuli/word_pngs_grid/grid_forest.png', 'Doubled': 0},
      {'WordImage_4': 'vwfaLoc/stimuli/word_pngs_grid/grid_prince.png', 'Doubled': 0},
      {'WordImage_4': 'vwfaLoc/stimuli/word_pngs_grid/grid_sheep.png', 'Doubled': 0},
      {'WordImage_4': 'vwfaLoc/stimuli/word_pngs_grid/grid_puzzle.png', 'Doubled': 0},
      {'WordImage_4': 'vwfaLoc/stimuli/word_pngs_grid/grid_feather.png', 'Doubled': 0},
      {'WordImage_4': 'vwfaLoc/stimuli/word_pngs_grid/grid_rose.png', 'Doubled': 0},
      {'WordImage_4': 'vwfaLoc/stimuli/word_pngs_grid/grid_leaf.png', 'Doubled': 0},
      {'WordImage_4': 'vwfaLoc/stimuli/word_pngs_grid/grid_dress.png', 'Doubled': 0},
      {'WordImage_4': 'vwfaLoc/stimuli/word_pngs_grid/grid_dress.png', 'Doubled': 1},
      {'WordImage_4': 'vwfaLoc/stimuli/word_pngs_grid/grid_gold.png', 'Doubled': 0},
      {'WordImage_4': 'vwfaLoc/stimuli/word_pngs_grid/grid_chair.png', 'Doubled': 0},
      {'WordImage_4': 'vwfaLoc/stimuli/word_pngs_grid/grid_radio.png', 'Doubled': 0},
      {'WordImage_4': 'vwfaLoc/stimuli/word_pngs_grid/grid_flag.png', 'Doubled': 0},
      {'WordImage_4': 'vwfaLoc/stimuli/word_pngs_grid/grid_camera.png', 'Doubled': 0},
      {'WordImage_4': 'vwfaLoc/stimuli/word_pngs_grid/grid_camera.png', 'Doubled': 1},
      {'WordImage_4': 'vwfaLoc/stimuli/word_pngs_grid/grid_peach.png', 'Doubled': 0}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
    Routine WordBlock_4
  LoopTerminator wordblock_4_loop
  LoopInitiator scrwordblock_4_loop loopType="TrialHandler"
    conditionsFile = ScrWordConditions_4.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'ScrWordImage_4': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_guest.png', 'Doubled': 0},
      {'ScrWordImage_4': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_goat.png', 'Doubled': 0},
      {'ScrWordImage_4': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_lemon.png', 'Doubled': 0},
      {'ScrWordImage_4': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_mayor.png', 'Doubled': 0},
      {'ScrWordImage_4': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_acorn.png', 'Doubled': 0},
      {'ScrWordImage_4': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_leaf.png', 'Doubled': 0},
      {'ScrWordImage_4': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_milk.png', 'Doubled': 0},
      {'ScrWordImage_4': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_olive.png', 'Doubled': 0},
      {'ScrWordImage_4': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_frame.png', 'Doubled': 0},
      {'ScrWordImage_4': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_flower.png', 'Doubled': 0},
      {'ScrWordImage_4': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_flower.png', 'Doubled': 1},
      {'ScrWordImage_4': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_mouth.png', 'Doubled': 0},
      {'ScrWordImage_4': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_farm.png', 'Doubled': 0},
      {'ScrWordImage_4': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_coin.png', 'Doubled': 0},
      {'ScrWordImage_4': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_heel.png', 'Doubled': 0},
      {'ScrWordImage_4': 'vwfaLoc/stimuli/scr_word_pngs_grid/grid_scr_judge.png', 'Doubled': 0}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
    Routine ScrWordBlock_4
  LoopTerminator scrwordblock_4_loop
  LoopInitiator objectblock_4_loop loopType="TrialHandler"
    conditionsFile = ObjectConditions_4.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'ObjectImage_4': 'vwfaLoc/stimuli/line_pngs_grid/grid_Screwdriver.png', 'Doubled': 0},
      {'ObjectImage_4': 'vwfaLoc/stimuli/line_pngs_grid/grid_bowl.png', 'Doubled': 0},
      {'ObjectImage_4': 'vwfaLoc/stimuli/line_pngs_grid/grid_OBJ42.png', 'Doubled': 0},
      {'ObjectImage_4': 'vwfaLoc/stimuli/line_pngs_grid/grid_OBJ35.png', 'Doubled': 0},
      {'ObjectImage_4': 'vwfaLoc/stimuli/line_pngs_grid/grid_Cat.png', 'Doubled': 0},
      {'ObjectImage_4': 'vwfaLoc/stimuli/line_pngs_grid/grid_BatAnimal.png', 'Doubled': 0},
      {'ObjectImage_4': 'vwfaLoc/stimuli/line_pngs_grid/grid_arm.png', 'Doubled': 0},
      {'ObjectImage_4': 'vwfaLoc/stimuli/line_pngs_grid/grid_arm.png', 'Doubled': 1},
      {'ObjectImage_4': 'vwfaLoc/stimuli/line_pngs_grid/grid_OBJ8.png', 'Doubled': 0},
      {'ObjectImage_4': 'vwfaLoc/stimuli/line_pngs_grid/grid_car.png', 'Doubled': 0},
      {'ObjectImage_4': 'vwfaLoc/stimuli/line_pngs_grid/grid_PalmTree.png', 'Doubled': 0},
      {'ObjectImage_4': 'vwfaLoc/stimuli/line_pngs_grid/grid_Butterfly.png', 'Doubled': 0},
      {'ObjectImage_4': 'vwfaLoc/stimuli/line_pngs_grid/grid_pliers.png', 'Doubled': 0},
      {'ObjectImage_4': 'vwfaLoc/stimuli/line_pngs_grid/grid_OBJ35A.png', 'Doubled': 0},
      {'ObjectImage_4': 'vwfaLoc/stimuli/line_pngs_grid/grid_Cup.png', 'Doubled': 0},
      {'ObjectImage_4': 'vwfaLoc/stimuli/line_pngs_grid/grid_Elephant.png', 'Doubled': 0},
      {'ObjectImage_4': 'vwfaLoc/stimuli/line_pngs_grid/grid_OBJ22A.png', 'Doubled': 0},
      {'ObjectImage_4': 'vwfaLoc/stimuli/line_pngs_grid/grid_Lightbulb.png', 'Doubled': 0}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
    Routine ObjectBlock_4
  LoopTerminator objectblock_4_loop
  LoopInitiator faceblock_4_loop loopType="TrialHandler"
    conditionsFile = FaceConditions_4.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'FaceImage_4': 'vwfaLoc/stimuli/face_pngs_grid/grid_face_draw10_3.png', 'Doubled': 0},
      {'FaceImage_4': 'vwfaLoc/stimuli/face_pngs_grid/grid_Screen Shot 2014-04-11 at 3.47.36 PM.png', 'Doubled': 0},
      {'FaceImage_4': 'vwfaLoc/stimuli/face_pngs_grid/grid_Screen Shot 2014-04-11 at 1.56.54 PM.png', 'Doubled': 0},
      {'FaceImage_4': 'vwfaLoc/stimuli/face_pngs_grid/grid_Screen Shot 2014-04-11 at 3.46.56 PM.png', 'Doubled': 0},
      {'FaceImage_4': 'vwfaLoc/stimuli/face_pngs_grid/grid_Screen Shot 2014-04-11 at 2.13.33 PM.png', 'Doubled': 0},
      {'FaceImage_4': 'vwfaLoc/stimuli/face_pngs_grid/grid_Screen Shot 2014-04-11 at 1.52.58 PM.png', 'Doubled': 0},
      {'FaceImage_4': 'vwfaLoc/stimuli/face_pngs_grid/grid_Screen Shot 2014-04-11 at 2.14.59 PM.png', 'Doubled': 0},
      {'FaceImage_4': 'vwfaLoc/stimuli/face_pngs_grid/grid_face_draw1_3.png', 'Doubled': 0},
      {'FaceImage_4': 'vwfaLoc/stimuli/face_pngs_grid/grid_Screen Shot 2014-04-11 at 3.46.34 PM.png', 'Doubled': 0},
      {'FaceImage_4': 'vwfaLoc/stimuli/face_pngs_grid/grid_Screen Shot 2014-04-11 at 2.14.17 PM.png', 'Doubled': 0},
      {'FaceImage_4': 'vwfaLoc/stimuli/face_pngs_grid/grid_face_draw15_1.png', 'Doubled': 0},
      {'FaceImage_4': 'vwfaLoc/stimuli/face_pngs_grid/grid_Screen Shot 2014-04-11 at 2.12.16 PM.png', 'Doubled': 0},
      {'FaceImage_4': 'vwfaLoc/stimuli/face_pngs_grid/grid_face_draw9_2.png', 'Doubled': 0},
      {'FaceImage_4': 'vwfaLoc/stimuli/face_pngs_grid/grid_face_draw9_2.png', 'Doubled': 1}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
    Routine FaceBlock_4
  LoopTerminator faceblock_4_loop
  LoopInitiator fixationloop4 loopType="TrialHandler"
    loopType = random
    nReps = 26
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    Routine fixation
  LoopTerminator fixationloop4
